PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Completed URL = https://app.prolific.com/submissions/complete?cc=C1IT5MXI
  End Message = Merci de votre patience et de votre participation.
  Experiment info = {'participant': '', 'group': '["native","learner"]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = scalar-implicatures
  exportHTML = on Save
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine welcome
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    TextComponent textWelcome
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        ***** EXPÉRIENCE EN LIGNE *****

        Vous avez complété la première tâche. Dans cette expérience, vous accomplirez les deux dernières tâches.


        Appuyez sur la barre d'espacement pour passer à la tâche suivante.
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine saving
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    CodeComponent savingCode
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = "group_" + expInfo["group"] + "_participant_" + expInfo["participant"] + "_" + psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime;

        // Convert data object to JSON
        let dataJSON = JSON.stringify(psychoJS.experiment._trialsData);

        // Send data to OSF
        fetch("https://pipe.jspsych.org/api/data/", {
              method: "POST",
              headers: {
                "Content-Type": "application/json",
                Accept: "*/*",
              },
              body: JSON.stringify({
                experimentID: "pGFiZFN0CmV4",
                filename: `${filename}.json`,
                data: dataJSON,
              }),
        }).then(response => response.json()).then(data => {
            console.log(data);
            quitPsychoJS("Merci d'avoir participé ! Le code d'achèvement pour Prolific est C1IT5MXI", true);
        });
    TextComponent savingText
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        ***** FIN *****

        Je vous remercie d'avoir complété l'expérience !

        Les résultats sont en cours d'enregistrement.

        Veuillez patienter...
  Routine fix
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    TextComponent fix_rand
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+0.3
      text = +
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  Routine taskSI
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    TextComponent instructionsSI
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        ***** TÂCHE 2: ÉVALUATION DES PHRASES *****

        Une phrase vous sera présentée et vous répondrez à une question sur cette phrase à l'aide du clavier.

        Appuyez sur la touche F pour répondre « non ».
        Appuyez sur la touche J pour répondre « oui ».


        Appuyez sur la barre d'espacement pour démarrer.
    KeyboardComponent keySI
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine taskLDT
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    TextComponent instructionsLDT
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        ***** TÂCHE 3: DÉTERMINATION DU NIVEAU DE FRANÇAIS *****

        Des mots seront affichés à l'écran. Ils ressembleront tous à des mots français. Certains d'entre eux sont vrais. D'autres sont faux.

        Appuyez sur la touche F  si le mot est faux.
        Appuyez sur la touche J si le mot est vrai.


        Appuyez sur la barre d'espacement pour démarrer.
    KeyboardComponent keyLDT
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine stimLDT
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    TextComponent textLDT
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent respLDT
      allowedKeys [set every repeat] = 'f','j'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine stimSI
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    CodeComponent codeSI
      Code Type = Both
      Begin JS Routine:
        textSI.setText("");
        text = `${speaker} dit :  « ${sentence}. »

        Est-ce que vous pouvez en conclure que, selon ${speaker}, ${negation} ?

        [f] non     [j] oui`;
      Begin Routine:
        textSI.setText("")
        text = '%s dit :  « %s. »\n\n \
        Est-ce que vous pouvez en conclure que, \
        selon %s, %s ?\
        \n\n[f] non\t\t[j] oui\n'\
        %(speaker, sentence, speaker, negation)
    TextComponent textSI
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $text
      wrapWidth = 1.2
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    KeyboardComponent respSI
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Merci d'avoir participé dans cette étude!

        Si vous avez trouvé cette étude sur Prolific, le code d'achèvement est C1IT5MXI.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine taskSI
  LoopInitiator implicatures loopType="TrialHandler"
    conditionsFile = resources/stimuliMainTask.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'id': 1, 'scale_term': 'spéciale/unique', 'scale_type': 'B', 'condition': 'test', 'speaker': 'Julie', 'sentence': 'le collier est spéciale', 'negation': "le collier n'est pas unique"},
      {'id': 2, 'scale_term': 'faible/vide', 'scale_type': 'B', 'condition': 'test', 'speaker': 'Julie', 'sentence': 'la pile est faible', 'negation': "la pile n'est pas vide"},
      {'id': 3, 'scale_term': 'dure/insoluble', 'scale_type': 'B', 'condition': 'test', 'speaker': 'Julie', 'sentence': 'la tâche est dure', 'negation': "la tache n'est pas insoluble"},
      {'id': 4, 'scale_term': 'mémorable/inoubliable', 'scale_type': 'B', 'condition': 'test', 'speaker': 'Julie', 'sentence': 'le voyage est mémorable', 'negation': "le voyage n'est pas inoubliable"},
      {'id': 5, 'scale_term': 'calme/inaudible', 'scale_type': 'B', 'condition': 'test', 'speaker': 'Julie', 'sentence': 'la classe est calme', 'negation': "la classe n'est pas inaudible"},
      {'id': 6, 'scale_term': 'mouillé/trempé', 'scale_type': 'B', 'condition': 'test', 'speaker': 'Julie', 'sentence': 'la serviette est mouillée', 'negation': "la serviette n'est pas trempée"},
      {'id': 7, 'scale_term': 'triste/abattu', 'scale_type': 'B', 'condition': 'test', 'speaker': 'Paul', 'sentence': 'la fille est triste', 'negation': "la fille n'est pas abattue"},
      {'id': 8, 'scale_term': 'difficile/impossible', 'scale_type': 'B', 'condition': 'test', 'speaker': 'Paul', 'sentence': 'le test est difficile', 'negation': "le test n'est pas impossible"}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
    Routine fix
    Routine stimSI
  LoopTerminator implicatures
  Routine taskLDT
  LoopInitiator lexTALE loopType="TrialHandler"
    conditionsFile = resources/stimuliLexTALE.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'word': 'cheveux', 'status': 'word', 'corrAns': 'j'},
      {'word': 'soumon', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'cloche', 'status': 'word', 'corrAns': 'j'},
      {'word': 'fascine', 'status': 'word', 'corrAns': 'j'},
      {'word': 'huif', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'semonce', 'status': 'word', 'corrAns': 'j'},
      {'word': 'canoter', 'status': 'word', 'corrAns': 'j'},
      {'word': 'infâme', 'status': 'word', 'corrAns': 'j'},
      {'word': 'fourmi', 'status': 'word', 'corrAns': 'j'},
      {'word': 'cadenas', 'status': 'word', 'corrAns': 'j'},
      {'word': 'racaille', 'status': 'word', 'corrAns': 'j'},
      {'word': 'pourcine', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'œillet', 'status': 'word', 'corrAns': 'j'},
      {'word': 'raplaner', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'plaiser', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'cerveler', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'endifier', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'jamain', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'ennemi', 'status': 'word', 'corrAns': 'j'},
      {'word': 'pouce', 'status': 'word', 'corrAns': 'j'},
      {'word': 'metter', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'fosse', 'status': 'word', 'corrAns': 'j'},
      {'word': 'inciter', 'status': 'word', 'corrAns': 'j'},
      {'word': 'salière', 'status': 'word', 'corrAns': 'j'},
      {'word': 'fouet', 'status': 'word', 'corrAns': 'j'},
      {'word': 'cessure', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'clouer', 'status': 'word', 'corrAns': 'j'}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
    Routine fix
    Routine stimLDT
  LoopTerminator lexTALE
  Routine saving
